---
API: 2.1
OpenSesame: 3.3.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 720
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 23
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:\\OneDrive\\Bureaublad\\an_data_cogsci"
set disable_garbage_collection no
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define advanced_delay advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "Waits for a specified duration"

define inline_script countdown
	set description "Executes Python code"
	___run__
	import time
	
	c3 = Canvas()
	c2 = Canvas()
	c1 = Canvas()
	c0 = Canvas()
	
	c3.text("3")
	c2.text("2")
	c1.text("1")
	
	c3.show()
	time.sleep(1)
	c2.show()
	time.sleep(1)
	c1.show()
	time.sleep(1)
	c0.show()
	time.sleep(0.25)
	__end__
	set _prepare ""

define inline_script countdown_demo
	set description "Executes Python code"
	___run__
	import time
	
	c3 = Canvas()
	c2 = Canvas()
	c1 = Canvas()
	c0 = Canvas()
	
	c3.text("3")
	c2.text("2")
	c1.text("1")
	
	c3.show()
	time.sleep(1)
	c2.show()
	time.sleep(1)
	c1.show()
	time.sleep(1)
	c0.show()
	time.sleep(0.25)
	__end__
	set _prepare ""

define sketchpad delay_start
	set duration 1000
	set description "Displays stimuli"

define sketchpad delay_start_demo
	set duration 1000
	set description "Displays stimuli"

define form_text_input demo_input_recall
	set timeout 30000
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Which words do you remember? "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script demo_recall
	set description "Executes Python code"
	___run__
	import time
	
	c = Canvas(background_color = 'black')
	c.show()
	__end__
	set _prepare ""

define advanced_delay demo_recall_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 30000
	set description "Waits for a specified duration"

define sketchpad demo_recalla
	set duration 30000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=always text="Which words to you remember?" x=0 y=0 z_index=0

define loop demo_trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 index 1
	setcycle 1 index 2
	setcycle 2 index 3
	setcycle 3 index 4
	setcycle 4 index 5
	setcycle 5 index 6
	setcycle 6 index 7
	setcycle 7 index 8
	setcycle 8 index 9
	setcycle 9 index 10
	setcycle 10 index 11
	setcycle 11 index 12
	setcycle 12 index 13
	setcycle 13 index 14
	setcycle 14 index 15
	run phrase_sequence

define sketchpad display_word_pair
	set start_response_interval no
	set reset_variables no
	set duration 6000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="" x=-32 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="adjective noun" x=-32 y=0 z_index=0

define sketchpad end_recall
	set duration 500
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run form_instructions always
	run form_consent always
	run survey_sequence always
	run practice_sequence always
	run form_real_experiment always
	run experiment_sequence always
	run form_research_debrief always

define loop experiment_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experiment_trial_sequence

define sketchpad experiment_recall
	set duration 90000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=always text="Which phrases do you remember?" x=0 y=0 z_index=0

define inline_script experiment_recall_1
	set description "Executes Python code"
	___run__
	import time
	
	c = Canvas(background_color = 'black')
	c.show()
	__end__
	set _prepare ""

define advanced_delay experiment_recall_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 90000
	set description "Waits for a specified duration"

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run select_phrases always
	run experiment_loop always

define loop experiment_trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 index 1
	setcycle 1 index 2
	setcycle 2 index 3
	setcycle 3 index 4
	setcycle 4 index 5
	setcycle 5 index 6
	setcycle 6 index 7
	setcycle 7 index 8
	setcycle 8 index 9
	setcycle 9 index 10
	setcycle 10 index 11
	setcycle 11 index 12
	setcycle 12 index 13
	setcycle 13 index 14
	setcycle 14 index 15
	run phrase_sequence

define sequence experiment_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run countdown always
	run experiment_trial_loop always
	run experiment_recall_1 always
	run experiment_recall_delay always
	run end_recall always
	run logger always

define form_multiple_choice form_age
	set timeout infinite
	set spacing 10
	set question "What is your age?"
	__options__
	Younger
	18
	19
	20
	21
	22
	23
	24
	Older
	__end__
	set margins "50;50;50;50"
	set form_var p_age
	set form_title "Survey 2/3"
	set description "A simple multiple choice item"
	set button_text Proceed
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input form_age_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var p_age
	set form_title "Survey 2/3"
	set form_question "Please type your age and press enter to confirm."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	This experiment poses no known risks to your health.
	The data will initially not be anonymous for verification purposes, but will be made anonymous in the analysis.
	
	You can stop at any time during experiment if you feel uncomfortable.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask now.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_text_display form_demo_start
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I am ready"
	set margins "50;50;50;50"
	set form_title "Practise phase"
	__form_text__
	The experiment goes as follows:
	You will be shown a series of words or phrases, and must do your best to remember as many of them as possible. Each word or phrase will be briefly shown before disappearing.
	When the round is finished, a black screen will appear. Please speak all words you remember while the screen is black. The program might stop responding; ignore this and don't click anywhere.
	
	A practice round will now follow, containing the names of fruits. This round is meant to make sure the experiment is set up properly, and you understand what is expected of you.
	
	Once you click the button below, the experiment will begin. You will have 30 seconds after the last word appeared to speak the ones you remember.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice form_education
	set timeout infinite
	set spacing 10
	set question "What is your level of education?"
	__options__
	Bachelor
	Master
	PhD
	__end__
	set margins "50;50;50;50"
	set form_var p_education
	set form_title "Survey 3/3"
	set description "A simple multiple choice item"
	set button_text Proceed
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice form_gender
	set timeout infinite
	set spacing 10
	set question "What is your gender?"
	__options__
	Male
	Female
	I would rather not say
	__end__
	set margins "50;50;50;50"
	set form_var p_gender
	set form_title "Survey 1/3"
	set description "A simple multiple choice item"
	set button_text Proceed
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_display form_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I understand"
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Please read all instructions carefully! 
	The experiment will not take longer than 15 minutes to finish. Please make sure you are in an environment without distractions.
	
	You will be presented with a mandatory consent form for this experiment. After that, you will be asked to complete a small survey regarding your gender, age and language proficiency. 
	
	Once formalities are out of the way, you will take part in a practice round to familiarize you with the details of the experiment.
	
	After practice round, the real experiment will follow, which consists of two rounds. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice form_language
	set timeout infinite
	set spacing 10
	set question "Is English your native language?"
	__options__
	Yes
	No
	__end__
	set margins "50;50;50;50"
	set form_var p_language
	set form_title "Survey 3/3"
	set description "A simple multiple choice item"
	set button_text Proceed
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice form_name
	set timeout infinite
	set spacing 10
	set question "What is your gender?"
	__options__
	Male
	Female
	I would rather not say
	__end__
	set margins "50;50;50;50"
	set form_var p_gender
	set form_title "Survey 1/3"
	set description "A simple multiple choice item"
	set button_text Proceed
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input form_name_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var p_name
	set form_title "Survey 2/3"
	set form_question "Please type your name and press enter to confirm."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_display form_real_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I am ready"
	set margins "50;50;50;50"
	set form_title "Experiment phase"
	__form_text__
	This is the end of the training phase.
	You are about to start the real experiment. Here you will be presented with phrases. There will be three rounds, and the next one will begin immediately after the 90 second recall period has finished. Recall as many phrases as you can!
	
	Good luck!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display form_research_debrief
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Exit
	set margins "50;50;50;50"
	set form_title "Research debrief"
	__form_text__
	Thank you for participating in the experiment! 
	
	Now, what about the experiment?
	
	Have you ever heard of Chomsky's "Colorless green ideas sleep furiously" sentence?
	The sentence above demonstrates the concept of semantic deviance, where grammatically
	correct words produce nonsensical sentence with no obvious underlying meaning.
	
	Our research is related to the impact of semantic deviance on immediate memory
	performance. Specifically, we are measuring how semantically deviant 
	phrases affect your memory recall peformance, by measuring the number of phrases 
	you can recall.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_input input_recallb
	set timeout 90000
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var recalled_words
	set form_title Title
	set form_question "What phrases or words do you remember?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample ""
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=always text="The practice trial will now begin. <br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define sequence phrase_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_phrase always

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run select_practice_phrases always
	run form_demo_start always
	run countdown_demo always
	run demo_trial_loop always
	run demo_recall always
	run demo_recall_delay always

define inline_script select_phrases
	set description "Executes Python code"
	___run__
	import random
	import csv
	from datetime import datetime
	random.seed(datetime.now())
	
	file = ''
	global high_deviance
	high_deviance = random.choice([False, True])
	
	
	if high_deviance:
	    file = pool[u'h.csv']
	else:
	    file = pool[u'l.csv']
	    
	phrases = []
	
	with open(file, newline='') as csvfile:
	    reader = csv.reader(csvfile, delimiter=',')
	    phrase_pool = []
	
	    s = True
	    for row in reader:
	        if s:
	            variables = row
	            s = False
	            continue
	        phrase_pool.append(row)
	
	    while(len(phrases) < 15):
	        selected = random.choice(phrase_pool)
	        if selected not in phrases:
	            phrases.append(selected)
	var.phrases = phrases
	__end__
	set _prepare ""

define inline_script select_practice_phrases
	set description "Executes Python code"
	___run__
	global phrases
	phrases = [["", w, ""] for w in ["apple", "orange", "banana", "pineapple", "tangerine", "watermelon", "avocado", "apricot", "cherry", "kiwi", "mango", "lemon", "pear", "peach", "strawberry"]]   
	__end__
	set _prepare ""

define inline_script show_phrase
	set description "Executes Python code"
	___run__
	import time
	
	phrase_row = phrases[var.index - 1]
	phrase = phrase_row[1] + " " + phrase_row[2]
	
	canvas = Canvas()
	canvas.text(phrase)
	canvas.show()
	time.sleep(4)
	
	mask = Canvas()
	mask.show()
	time.sleep(0.5)
	__end__
	set _prepare ""

define sequence survey_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run form_name_1 always
	run form_gender always
	run form_age_1 always
	run form_language always
	run form_education always

define inline_javascript text_to_speech
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	var message = new SpeechSynthesisUtterance();
	
	var voices = window.speechSynthesis.getVoices();
	message.voice = voices[1];
	message.voiceURI = 'native';
	message.lang = 'en-GB';
	message.text = '[word_pair]';
	
	
	speechSynthesis.speak(message);
	__end__
	set _prepare ""

define inline_script white_screen
	set description "Executes Python code"
	___run__
	import time
	__end__
	set _prepare ""

